PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = wordpriming
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_words
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $text
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = studyphase_priming.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_words': 'vase '},
      {'study_words': 'tiger'},
      {'study_words': 'book'},
      {'study_words': 'cushion'},
      {'study_words': 'piano'},
      {'study_words': 'tube'},
      {'study_words': 'tata'},
      {'study_words': 'mouse'},
      {'study_words': 'queen'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = testwords_priming.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': '_a_e'},
      {'text': 't_g_r'},
      {'text': '_oo_'},
      {'text': 'c_s_i_n'},
      {'text': '_ia__'},
      {'text': 't_b_'},
      {'text': 't_t_'},
      {'text': '_o_s_'},
      {'text': 'q__en'},
      {'text': 'p_o_e'},
      {'text': 'p_st_y'},
      {'text': 's__p'},
      {'text': '_r__k'},
      {'text': 'c_rt__ns'},
      {'text': 'n_n_'}]
    Routine test
  LoopTerminator trials_2
